CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:4
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['getting a mnimal image set from a single field for a single plate.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory does contain "Images") (file does containregexp ".*f01.*.tiff")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['Imaging criteria: 9 fields per well, each field has four z-stacks, each stack has two channels. Images were taken for 384-well plates, each at two time points (Measurement 1 and 2).']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:Yes
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
    Regular expression to extract from folder name:^.*(?P<dirid>(?P<plateid>SCBHCS[0-9]{6})__(?P<timestamp>[0-9]{4}-[0-9]{1,2}-[0-9]{1,2}T[0-9]{1,2}_[0-9]{1,2}_[0-9]{1,2})-Measurement[\s]{1}(?P<measurement>[0-9]{1}))/Images
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<WellRow>r[0-9]{2})(?P<WellCol>c[0-9]{2})(?P<FieldId>f[0-9]{2})(?P<StackId>p[0-9]{2})(-)(?P<Channel>ch[0-9]{1})(.*.tiff)
    Regular expression to extract from folder name:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['Test group_by across eight images taken from a single field (four stacks into two channels). Grouping is failing here but works otherwise when using group_by or pivot function in R language.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[{'Ch1_nucleus': 'StackId', 'Ch2_ecTag': 'StackId'}, {'Ch1_nucleus': 'Channel', 'Ch2_ecTag': 'Channel'}]
    Image set matching method:Metadata
    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (metadata does Channel "ch1")
    Name to assign these images:Ch1_nucleus
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (metadata does Channel "ch2")
    Name to assign these images:Ch2_ecTag
    Name to assign these objects:Nucleus
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:6
    Metadata category:timepoint
    Metadata category:plateid
    Metadata category:timepoint
    Metadata category:Well
    Metadata category:FieldId
    Metadata category:Channel
